PsychoPy2experiment version="1.84.0"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [2560, 1440]
  Full-screen window = True
  Experiment info = {u'project': u'PEAS', u'participant': u''}
  Save csv file = True
  expName = block_pics
  Save excel file = True
  Units = norm
  Screen = 1
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Routines
  Routine fix
    TextComponent text_fix
      text = +
      stopVal [duration (s)] = 3.0
      startVal [time (s)] = 0
      letterHeight = 0.50
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  Routine fix1
    TextComponent text_2
      text = +
      stopVal [duration (s)] = 6.0
      startVal [time (s)] = 0.0
      letterHeight = 0.5
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  Routine pics
    ImageComponent image
      stopVal [duration (s)] = 2.5
      startVal [time (s)] = 0.0
      image [set every repeat] = $images
      size = 1.35
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  Routine intro
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        The paradigm will begin soon

        press space bar to continue
    KeyboardComponent trigger
      forceEndRoutine = True
      allowedKeys = 'space', 'O', 'o'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine thanks
    TextComponent thanks_text
      text = Thanks for particpanting!
      stopVal [duration (s)] = 3.0
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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  Routine pics2
    ImageComponent image_2
      stopVal [duration (s)] = 2.5
      startVal [time (s)] = 0.0
      image [set every repeat] = $images2
      size = 1.35
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  Routine pics3
    ImageComponent image_3
      stopVal [duration (s)] = 2.5
      startVal [time (s)] = 0.0
      image [set every repeat] = $images3
      size = 1.35
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Flow
  Routine intro
  Routine fix1
  LoopInitiator pic_expose loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    random seed = 11
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'images': u'pics/LSa07.jpg', u'TYPE': u'low_Savory', u'images3': u'pics/LSa09.jpg', u'images2': u'pics/LSa08.jpg'},
      {u'images': u'pics/W16.jpg', u'TYPE': u'water', u'images3': u'pics/W18.jpg', u'images2': u'pics/W17.jpg'},
      {u'images': u'pics/HSa10.jpg', u'TYPE': u'high_Savory', u'images3': u'pics/HSa12.jpg', u'images2': u'pics/HSa11.jpg'},
      {u'images': u'pics/LSw04.jpg', u'TYPE': u'low_Sweet', u'images3': u'pics/LSw06.jpg', u'images2': u'pics/LSw05.jpg'},
      {u'images': u'pics/W02.jpg', u'TYPE': u'water', u'images3': u'pics/W08.jpg', u'images2': u'pics/W04.jpg'},
      {u'images': u'pics/LSa11.jpg', u'TYPE': u'low_Savory', u'images3': u'pics/LSa03.jpg', u'images2': u'pics/LSa01.jpg'},
      {u'images': u'pics/W05.jpg', u'TYPE': u'water', u'images3': u'pics/W06.jpg', u'images2': u'pics/W10.jpg'},
      {u'images': u'pics/HSa01.jpg', u'TYPE': u'high_Savory', u'images3': u'pics/HSa03.jpg', u'images2': u'pics/HSa02.jpg'},
      {u'images': u'pics/HSw04.jpg', u'TYPE': u'high_Sweet', u'images3': u'pics/HSw06.jpg', u'images2': u'pics/HSw05.jpg'},
      {u'images': u'pics/LSa02.jpg', u'TYPE': u'low_Savory', u'images3': u'pics/LSa08.jpg', u'images2': u'pics/LSa04.jpg'},
      {u'images': u'pics/W01.jpg', u'TYPE': u'water', u'images3': u'pics/W03.jpg', u'images2': u'pics/W02.jpg'},
      {u'images': u'pics/LSa10.jpg', u'TYPE': u'low_Savory', u'images3': u'pics/LSa12.jpg', u'images2': u'pics/LSa11.jpg'},
      {u'images': u'pics/LSa09.jpg', u'TYPE': u'low_Savory', u'images3': u'pics/LSa07.jpg', u'images2': u'pics/LSa12.jpg'}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
    Routine pics
    Routine pics2
    Routine pics3
    Routine fix
  LoopTerminator pic_expose
  Routine thanks
